WorkflowBuilder(Version=2.6.3)
Bonsai.Vision.FileCapture => #0
  FileName="C:\Users\Andre Maia Chagas\Desktop\22.03.02 (FS)\1242022-03-02T12_52_43.avi"
  PlaybackRate=3.90625
  StartPosition=0
  PositionUnits=Frames
  Loop=false
  Playing=false
-> Bonsai.Vision.Crop(RegionOfInterest(X=145, Y=122, Width=237, Height=234)) => #1
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
-> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis => #5
#1, #5 -> GroupWorkflow top-left => #6
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0))
    -> OnErrorResumeNext => #3
    #3, #0 -> GroupWorkflow TL-index1 => #4
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=23, Y=168, Width=26, Height=57)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1))
    -> OnErrorResumeNext => #6
    #6, #0 -> GroupWorkflow TL-index2 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=147, Y=210, Width=35, Height=23)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2))
    -> OnErrorResumeNext => #9
    #9, #0 -> GroupWorkflow TL-index3 => #10
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=114, Y=51, Width=54, Height=42)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3))
    -> OnErrorResumeNext => #12
    #12, #0 -> GroupWorkflow TL-index4 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=72, Y=1, Width=30, Height=24)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4))
    -> OnErrorResumeNext => #15
    #15, #0 -> GroupWorkflow TL-index5 => #16
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=191, Y=18, Width=45, Height=61)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5))
    -> OnErrorResumeNext => #18
    #18, #0 -> GroupWorkflow TL-index6 => #19
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=15, Y=9, Width=21, Height=72)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #4, #7, #10, #13, #16, #19 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=504, Y=126, Width=218, Height=250)) => #7
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis => #11
#7, #11 -> GroupWorkflow top-right => #12
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0))
    -> OnErrorResumeNext => #3
    #3, #0 -> GroupWorkflow TR-index1 => #4
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=180, Y=44, Width=37, Height=22)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1))
    -> OnErrorResumeNext => #6
    #6, #0 -> GroupWorkflow TR-index2 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=19, Y=51, Width=28, Height=45)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2))
    -> OnErrorResumeNext => #9
    #9, #0 -> GroupWorkflow TR-index3 => #10
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=10, Y=24, Width=25, Height=50)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3))
    -> OnErrorResumeNext => #12
    #12, #0 -> GroupWorkflow TR-index4 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=86, Y=65, Width=31, Height=49)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4))
    -> OnErrorResumeNext => #15
    #15, #0 -> GroupWorkflow TR-index5 => #16
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=13, Y=18, Width=20, Height=55)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5))
    -> OnErrorResumeNext => #18
    #18, #0 -> GroupWorkflow TR-index6 => #19
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=12, Y=17, Width=22, Height=57)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #4, #7, #10, #13, #16, #19 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=144, Y=476, Width=204, Height=230)) => #13
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis => #17
#13, #17 -> GroupWorkflow bottom-left => #18
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0))
    -> OnErrorResumeNext => #3
    #3, #0 -> GroupWorkflow BL-index1 => #4
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=177, Y=164, Width=23, Height=57)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1))
    -> OnErrorResumeNext => #6
    #6, #0 -> GroupWorkflow BL-index2 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=96, Y=154, Width=24, Height=58)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2))
    -> OnErrorResumeNext => #9
    #9, #0 -> GroupWorkflow BL-index3 => #10
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=177, Y=33, Width=22, Height=52)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3))
    -> OnErrorResumeNext => #12
    #12, #0 -> GroupWorkflow BL-index4 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=183, Y=9, Width=20, Height=16)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4))
    -> OnErrorResumeNext => #15
    #15, #0 -> GroupWorkflow BL-index5 => #16
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=69, Y=1, Width=49, Height=79)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5))
    -> OnErrorResumeNext => #18
    #18, #0 -> GroupWorkflow BL-index6 => #19
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=5, Y=16, Width=33, Height=48)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #4, #7, #10, #13, #16, #19 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=492, Y=492, Width=233, Height=233)) => #19
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxTC89L1, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis => #23
#19, #23 -> GroupWorkflow bottom-right => #24
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0))
    -> OnErrorResumeNext => #3
    #3, #0 -> GroupWorkflow BR-index1 => #4
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1))
    -> OnErrorResumeNext => #6
    #6, #0 -> GroupWorkflow BR-index2 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2))
    -> OnErrorResumeNext => #9
    #9, #0 -> GroupWorkflow BR-index3 => #10
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3))
    -> OnErrorResumeNext => #12
    #12, #0 -> GroupWorkflow BR-index4 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4))
    -> OnErrorResumeNext => #15
    #15, #0 -> GroupWorkflow BR-index5 => #16
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5))
    -> OnErrorResumeNext => #18
    #18, #0 -> GroupWorkflow BR-index6 => #19
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #4
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        #4 -> MemberSelector(Selector=RegionOfInterest.Y) => #7
        #4 -> MemberSelector(Selector=RegionOfInterest.X) => #8
        #4 -> MemberSelector(Selector=Height) => #9
        #4 -> MemberSelector(Selector=Width) => #10
        #10, #9, #6, #8, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as X,
            Item5 as Y

            )
        -> WorkflowOutput
    #4, #7, #10, #13, #16, #19 -> Zip
    -> WorkflowOutput
#6, #12, #18, #24 -> Zip
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Item1 as topLeft,
    Item2 as topRight,
    Item3 as bottomLeft,
    Item4 as bottomRight
    )
-> Disable Bonsai.IO.CsvWriter
  FileName="C:\Users\Andre Maia Chagas\Documents\GitHub\sussex\embryo-monitoring\data\output.csv"
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
